#pragma once
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "C:\\Users\\djross\\Documents\\temp\\Hamilton\\Library\\HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace GSF_IMS_SHARED_SUBMETHODS {
  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels, device & STAR, sequence & tips ) void ;
  function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, device & STAR, sequence & tips ) void ;
  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void ;
  function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void {
    if (pre_wet_tips == 1)
    {
      {
        sequence arrseqAspirate_1[];
        sequence arrseqDispense_1[];
        arrseqAspirate_1.SetSize(1);
        arrseqAspirate_1.SetAt(0, pre_wet_asp);
        arrseqDispense_1.SetSize(1);
        arrseqDispense_1.SetAt(0, pre_wet_disp);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_1, arrseqDispense_1, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", pre_wet_asp, pre_wet_disp) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, asp_seq);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, disp_seq);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 6);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_2, arrseqDispense_2, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", asp_seq, disp_seq) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
  }

  function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, device & STAR, sequence & tips ) void {
    private variable int_tip_type;
    MECC::TraceComment(Translate("**** start pipette_inducer shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    STAR_TIP_TOOLS::GetTipType(STAR, tips, int_tip_type);
    TrcTrace(Translate("int_tip_type: "), int_tip_type);
    if (int_tip_type == 1)
    {
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, asp_seq);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, disp_seq);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_3, arrseqDispense_3, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, 1, "", asp_seq, disp_seq) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (int_tip_type == 5)
      {
        {
          sequence arrseqAspirate_4[];
          sequence arrseqDispense_4[];
          arrseqAspirate_4.SetSize(1);
          arrseqAspirate_4.SetAt(0, asp_seq);
          arrseqDispense_4.SetSize(1);
          arrseqDispense_4.SetAt(0, disp_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_4, arrseqDispense_4, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, 1, "", asp_seq, disp_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    MECC::TraceComment(Translate("**** end pipette_inducer shard sub-method ****"));
  }

  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels, device & STAR, sequence & tips ) void {
    if (number_channels == 8)
    {
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, from_seq);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, to_seq);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_5, arrseqDispense_5, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (number_channels == 4)
      {
        {
          sequence arrseqAspirate_6[];
          sequence arrseqDispense_6[];
          arrseqAspirate_6.SetSize(1);
          arrseqAspirate_6.SetAt(0, from_seq);
          arrseqDispense_6.SetSize(1);
          arrseqDispense_6.SetAt(0, to_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", 6);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "00111100");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "00111100");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "00111100");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "00111100");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "00111100");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_6, arrseqDispense_6, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (number_channels == 7)
      {
        {
          sequence arrseqAspirate_7[];
          sequence arrseqDispense_7[];
          arrseqAspirate_7.SetSize(1);
          arrseqAspirate_7.SetAt(0, from_seq);
          arrseqDispense_7.SetSize(1);
          arrseqDispense_7.SetAt(0, to_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "11111110");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "11111110");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "11111110");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "11111110");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "11111110");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_7, arrseqDispense_7, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (number_channels == 6)
      {
        {
          sequence arrseqAspirate_8[];
          sequence arrseqDispense_8[];
          arrseqAspirate_8.SetSize(1);
          arrseqAspirate_8.SetAt(0, from_seq);
          arrseqDispense_8.SetSize(1);
          arrseqDispense_8.SetAt(0, to_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "01111110");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "01111110");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "01111110");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "01111110");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "01111110");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_8, arrseqDispense_8, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
  }

  function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void {
    if (pre_wet_tips == 1)
    {
      {
        sequence arrseqAspirate_9[];
        sequence arrseqDispense_9[];
        arrseqAspirate_9.SetSize(1);
        arrseqAspirate_9.SetAt(0, pre_wet_asp);
        arrseqDispense_9.SetSize(1);
        arrseqDispense_9.SetAt(0, pre_wet_disp);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_9, arrseqDispense_9, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", pre_wet_asp, pre_wet_disp) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    {
      sequence arrseqAspirate_10[];
      sequence arrseqDispense_10[];
      arrseqAspirate_10.SetSize(1);
      arrseqAspirate_10.SetAt(0, asp_seq);
      arrseqDispense_10.SetSize(1);
      arrseqDispense_10.SetAt(0, disp_seq);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_10, arrseqDispense_10, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", asp_seq, disp_seq) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
  }
} // library namespace
