#pragma once
#include "LMSF_Utilities.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ISWAP_PLATEANDLIDMOVEMENT {
  function GetBindPlateFromStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function GetFilterPlateFromStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveBindPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveComfortLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveGrowthPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveMidiPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MovePCRPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MovePCRPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function PutBindPlateToStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function PutFilterPlateToStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
  }
  function _ExitLibrary() {
    LMSF_UTILITIES::_ExitLibrary();
  }

  function MoveComfortLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 3;
    grip_width = 85.3;
    grip_opening = 88;
    grip_force = 1;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 3;
    grip_width = 85.3;
    grip_opening = 88;
    grip_force = 3;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MovePCRPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 6;
    grip_width = 81.5;
    grip_opening = 89;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveMidiPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 8;
    grip_width = 80;
    grip_opening = 87;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MovePCRPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 6;
    grip_width = 81.5;
    grip_opening = 89;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveGrowthPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 8;
    grip_width = 80;
    grip_opening = 87;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveBindPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 7;
    grip_width = 78;
    grip_opening = 85;
    grip_force = 7;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function PutBindPlateToStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable retract_dist;
    private variable lift_up_height;
    grip_height = 7;
    grip_width = 78;
    grip_opening = 85;
    grip_force = 7;
    retract_dist = 200;
    lift_up_height = 50;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function GetBindPlateFromStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable retract_dist;
    private variable grip_opening;
    private variable lift_up_height;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 7;
    grip_width = 78;
    grip_opening = 85;
    grip_force = 7;
    retract_dist = 200;
    lift_up_height = 50;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function PutFilterPlateToStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable retract_dist;
    private variable grip_opening;
    private variable lift_up_height;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 15;
    grip_width = 80;
    grip_opening = 85;
    grip_force = 7;
    retract_dist = 200;
    lift_up_height = 53;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function GetFilterPlateFromStorage( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable retract_dist;
    private variable grip_opening;
    private variable grip_width;
    private variable lift_up_height;
    private variable grip_force;
    private variable grip_height;
    grip_height = 15;
    grip_width = 80;
    grip_opening = 85;
    grip_force = 7;
    retract_dist = 200;
    lift_up_height = 53;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }
} // library namespace
