 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" }
#include "Cytometry for 3 ligands and 5 variants.res"
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable additive_stock_concentration;
variable additive_id;
variable additive_units;
variable lineage;
sequence old_GP_lid_arr[];
variable inducer_3_stock_concentration;
variable inducer_3_id;
variable inducer_2_id;
variable inducer_1_units;
variable inducer_1_id;
variable inducer_2_units;
variable inducer_2_stock_concentration;
variable inducer_3_units;
variable inducer_1_stock_concentration;
global device ML_STAR ("Cytometry for 3 ligands and 5 variants.lay", "ML_STAR", hslTrue);
variable plasmid_2_id;
variable plasmid_1_id;
variable plasmid_5_id;
variable plasmid_4_id;
variable plasmid_3_id;
dialog dialogHandle_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.Growth_Plate, media_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::pipette_cells_from_tubes(ML_STAR.Bacteria_stock, ML_STAR.Bacteria_dispense, cell_volume, 2, 800, ML_STAR.Tips_1000_Channels, 5, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
