 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" } 
 namespace _Method { #include "HSLTipCountingLib.hsl" } 
 namespace _Method { #include "HSLSeqLib.hsl" } 
 namespace _Method { #include "HSLStrLib.hsl" } 
 namespace _Method { #include "HSLTrcLib.hsl" } 
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" } 
 namespace _Method { #include "HSLExtensions\\String.hsl" } 
 namespace _Method { #include "HSLExtensions\\File.hsl" } 
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" } 
 namespace _Method { #include "HSLExtensions\\Directory.hsl" } 
 namespace _Method { #include "HSLTimLib.hsl" } 
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" } 
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" } 
#include "Fitness Selection 2.With DNA Extraction.res"
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" } 
/* {{ 2 "LibraryInsertLine" "" */ // }} ""
sequence tip_seq_arr[];
variable tip_counter_array[];
variable culture_volume;
variable pipette_volume;
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
dialog dialogHandleD8096798660C48a9A4C112C4ACF46285;
variable media_volume;
/* {{ 2 "VariableInsertLine" "" */ // }} ""
// {{ 2 "TemplateIncludeBlock" ""
 namespace _Method { #include "HSLMETEDLib.hs_" } 
 namespace _Method { #include "HSLMECCLib.hs_" } 
 namespace _Method { #include "HSLPTLLib.hsl" } 
// }} ""
// {{{ 2 "LocalSubmethodInclude" ""
 namespace _Method {  #include __filename__ ".sub"  } 
// }} ""
/* {{ 2 "ProcessInsertLine" "" */ // }} ""
// {{{ 5 "main" "Begin"
namespace _Method { method main(  ) void {
// }} ""
// {{ 5 "main" "InitLocals"
// }} ""
// {{ 2 "AutoInitBlock" ""
PTL::SetWashingStateDefault("RinseTime1", 5);
PTL::SetWashingStateDefault("SoakTime1", 5);
PTL::SetWashingStateDefault("FlowRate1", 11);
PTL::SetWashingStateDefault("RinseTime2", 0);
PTL::SetWashingStateDefault("SoakTime2", 0);
PTL::SetWashingStateDefault("FlowRate2", 11);
PTL::SetWashingStateDefault("DrainingTime", 10);
PTL::SetWashingStateDefault("StartWashLiquid", 0);
PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
COMMON96HEADSUBMETHODS::_InitLibrary();
TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
LMSF_UTILITIES::_InitLibrary();
PLATEANDLIDMOVEMENT::_InitLibrary();
GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
::RegisterAbortHandler( "OnAbort");
// }} ""
// {{ 1 1 0 "da5c5db6_4cc7_43e1_88d545441a5e9f6c" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing a test plate with media/water\n\nIt uses 8 1000 uL tips\n=========================================================================================="));
// }} ""
// {{ 2 1 0 "6eb3a6c6_8e75_4114_95a8eb0e602117e3" "{B31F3539-5D80-11d4-A5EB-0050DA737D89}"
dialogHandleD8096798660C48a9A4C112C4ACF46285.SetInputSize(1);
dialogHandleD8096798660C48a9A4C112C4ACF46285.SetInputField(0, Translate("enter media/water volume per well"), hslFloat, 500);
dialogHandleD8096798660C48a9A4C112C4ACF46285.ShowInput(Translate("Volume per well?"), hslInfinite, hslOKOnly | hslDefButton1);
culture_volume = dialogHandleD8096798660C48a9A4C112C4ACF46285.GetInputField(0);
// }} ""
// {{{ 3 1 0 "65492f06_28ca_4957_8a7421bef78e3006" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
StartUp();
// }} ""
// {{ 4 1 0 "8c5ed28e_d6cc_40f0_b5f603848beaff6a" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 5 1 0 "32c89628_da34_46b0_96e0489d25e3f856" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
// }} ""
// {{{ 6 1 0 "9b14e2e7_bfeb_48a5_af15b47f57035a94" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
// }} ""
// {{ 7 1 0 "8c5ed28e_d6cc_40f0_b5f603848beaff6a" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 8 1 0 "6cb5501c_995e_4ad3_8362d561739d3ed0" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 9 1 0 "042fea7b_b011_4531_9a0da7dab056cfff" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
// }} ""
// {{ 10 1 0 "13bda4c1_2651_4a37_875f17fe97742c2d" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
media_volume = culture_volume;
// }} ""
// {{{ 11 1 0 "8ff0ddb1_3c12_49cd_8f00a4bd43c0a657" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
// }} ""
// {{{ 12 1 0 "c3ec5e96_a681_465d_90866b7b3b0ddde6" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.Media_dispense_all, media_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
// }} ""
// {{{ 13 1 0 "5c0be018_2950_4a3f_90bf4214e3129d0b" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
// }} ""
// {{ 14 1 0 "6cb5501c_995e_4ad3_8362d561739d3ed0" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 15 1 0 "838c972b_65dd_4cc2_9f21d416c40d7f90" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 16 1 0 "e588fd94_8b6d_4537_841ea68f131ff8ea" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
// }} ""
// {{{ 17 1 0 "94be0fd6_787a_401f_b1b744e48f742842" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
// }} ""
// {{ 18 1 0 "838c972b_65dd_4cc2_9f21d416c40d7f90" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 19 1 0 "0d6e5c5e_f5d8_4d67_85f0d3dcafb7bb67" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
CleanUp();
// }} ""
// {{ 2 "AutoExitBlock" ""
COMMON96HEADSUBMETHODS::_ExitLibrary();
TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
LMSF_UTILITIES::_ExitLibrary();
PLATEANDLIDMOVEMENT::_ExitLibrary();
GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
// }} ""
// {{{ 5 "main" "End"
} }
// }} ""
// $$author=Hamilton$$valid=0$$time=2025-06-09 12:57$$checksum=4be4a8d2$$length=087$$