function Add_AmpureSingle( sequence & seq_AmpureBeads, sequence & seq_Destination, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_MixVolume, variable str_bead_step ) void ;
function Add_Ethanol( variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol ) void ;
function Add_RSB( sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_TouchOff, variable var_RetractHeight ) void ;
private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void ;
private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer, sequence & seq_PlateOnHSS ) void ;
private function Get_Tip_Use_Str( sequence & in_seq ) variable ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
function Remove_ResidualEtOH( sequence & seq_AspirationPosition ) void ;
function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void ;
private function StartUp(  ) void ;
private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void ;
private function Transfer_FromMidiOnMagnet( sequence & i_seqAsp, sequence & i_seqDisp, variable i_fltVolume, variable i_fltMixVolume, variable i_intDestinationIsEmpty ) void ;
private function Transfer_PCRtoMidi( sequence & i_seqAsp, sequence & i_seqDisp, variable i_fltVolume, variable i_fltMixVolume ) void ;
function Transfer_PlatetoWaste( sequence & seq_AspirationPosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
private function Transfer_ReagentsToPCR( sequence & i_seq_Tips, sequence & i_seqAsp, sequence & i_seqDisp, variable i_fltVolume, variable i_int_AspMixCycles, variable i_flt_AspMixVolume, variable i_int_DispMixCycles, variable i_flt_DispMixVolume, variable i_intDestinationIsEmpty, variable i_int_UseFourChannels, variable i_int_AspirationMode, variable i_int_ReuseTips ) void ;
private function User_add_300_tips(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  private variable SetTempCPAC;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable thermocycle_str;
  private dialog customDialog_4;
  private variable loopCounter9;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private dialog customDialog_9;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  if (bln_Global_SimulatorMode == 0)
  {
    if (is_pipetting == "true")
    {
      SetTempCPAC = 6;
    }
    else
    {
      SetTempCPAC = 37;
    }
    NIST_DEVICE_CONTROLLERS::InitCPAC();
    NIST_DEVICE_CONTROLLERS::SetCPACTemperature(1, SetTempCPAC);
  }
  use_ODTC = 1;
  use_manual_thermocycler = use_ODTC - 1;
  customDialog_3.InitCustomDialog("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");
  customDialog_3.SetCustomDialogProperty( "radioButton2.IsChecked", use_ODTC );
  customDialog_3.SetCustomDialogProperty( "radioButton3.IsChecked", use_manual_thermocycler );
  customDialog_3.ShowCustomDialog();
  use_ODTC = customDialog_3.GetCustomDialogProperty( "radioButton2.IsChecked" );
  use_manual_thermocycler = customDialog_3.GetCustomDialogProperty( "radioButton3.IsChecked" );
  if (use_manual_thermocycler == 1)
  {
    is_running_ODTC = Translate("false");
    thermocycle_str = Translate("Use manual termocycler");
  }
  else
  {
    thermocycle_str = Translate("Use automated ODTC");
  }
  is_lacI_experiment = 0;
  is_ramR_experiment = 0;
  lacI_ratio_1_1 = 0.6;
  lacI_ratio_1_2 = 0.6;
  lacI_ratio_2 = 1.0;
  ratio_1_1_str = StrFStrEx(lacI_ratio_1_1, 0, 2);
  ratio_1_2_str = StrFStrEx(lacI_ratio_1_2, 0, 2);
  ratio_2_str = StrFStrEx(lacI_ratio_2, 0, 3);
  lacI_str = StrConcat8(Translate("LacI: "), ratio_1_1_str, Translate(", "), ratio_1_2_str, Translate(", "), ratio_2_str, Translate(""), Translate(""));
  ramR_ratio_1_1 = 0.6;
  ramR_ratio_1_2 = 0.7;
  ramR_ratio_2 = 1.1;
  ratio_1_1_str = StrFStrEx(ramR_ratio_1_1, 0, 2);
  ratio_1_2_str = StrFStrEx(ramR_ratio_1_2, 0, 2);
  ratio_2_str = StrFStrEx(ramR_ratio_2, 0, 3);
  ramR_str = StrConcat8(Translate("RamR: "), ratio_1_1_str, Translate(", "), ratio_1_2_str, Translate(", "), ratio_2_str, Translate(""), Translate(""));
  confirm_str = Translate("");
  {
    loopCounter9 = 0;
    while (confirm_str == "")
    {
      loopCounter9 = loopCounter9 + 1;
      customDialog_5.InitCustomDialog("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");
      customDialog_5.SetCustomDialogProperty( "radioButton1.Content", lacI_str );
      customDialog_5.SetCustomDialogProperty( "radioButton1.IsChecked", is_lacI_experiment );
      customDialog_5.SetCustomDialogProperty( "radioButton2.Content", ramR_str );
      customDialog_5.SetCustomDialogProperty( "radioButton2.IsChecked", is_ramR_experiment );
      customDialog_5.ShowCustomDialog();
      is_lacI_experiment = customDialog_5.GetCustomDialogProperty( "radioButton1.IsChecked" );
      is_ramR_experiment = customDialog_5.GetCustomDialogProperty( "radioButton2.IsChecked" );
      if (is_lacI_experiment == 1)
      {
        confirm_str = lacI_str;
      }
      if (is_ramR_experiment == 1)
      {
        confirm_str = ramR_str;
      }
    }
  }
  user_choice = 1;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogProperty( "textBlock2.Text", confirm_str );
  customDialog_2.SetCustomDialogProperty( "textBlock4.Text", thermocycle_str );
  customDialog_2.ShowCustomDialog();
  user_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  TrcTrace8(Translate("****************** "), Translate("User selections: "), confirm_str, Translate(", "), Translate(""), Translate(" ******************"), Translate(""), Translate(""));
  user_choice = 1;
  if (use_ODTC == 1)
  {
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    user_choice = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
  }
  else
  {
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    user_choice = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
  }
  if (user_choice == 2)
  {
    abort;
  }
  user_choice = 1;
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  user_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  user_choice = 1;
  customDialog_9.InitCustomDialog("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");
  customDialog_9.ShowCustomDialog();
  user_choice = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  if (bln_Global_SimulatorMode == 0)
  {
    if(0){
      str_Global_ODTCIPAddress = Translate("192.168.88.253");
    }
    str_Global_ODTCIPAddress = Translate("169.254.207.19");
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    if (use_ODTC == 1)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      user_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer, sequence & seq_PlateOnHSS ) void {
  private timer EvaporationTime;
  private timer Incubate_RT_5sec;
  MECC::TraceComment(Translate("=====================================================================\nEthanol Step\n====================================================================="));
  {
    for(loopCounter5 = 0; loopCounter5 < 1;)
    {
      loopCounter5 = loopCounter5 + 1;
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid, ML_STAR.Water_EB_ethanol_lid_parking, 1, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        Add_Ethanol(96, seq_EthanolSource, seq_PlateOnMagnet, "Nano_HVF_80PercentEtOH_JetPart");
      }
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid_parking, ML_STAR.Water_EB_ethanol_lid, 1, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        MECC::TraceComment(Translate("==========================================================================\nTransfer Alcohol Supernatant to Waste\n=========================================================================="));
        Transfer_PlatetoWaste(seq_PlateOnMagnet, 200, "Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport");
      }
    }
  }
  MECC::TraceComment(Translate("==============================================================\nRemove Residual Ethanol\n=============================================================="));
  if (is_pipetting == "true")
  {
    Remove_ResidualEtOH(seq_PlateOnMagnet);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nMove to Shaker\n=================================================================================================================================="));
  ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
  }
  if( 0 == EvaporationTime.SetTimer(timer_30_sec) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("**** 30 extra seconds on HHS (off magnet) for ethanol evaporation ****"));
  if( 0 == EvaporationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid, ML_STAR.Water_EB_ethanol_lid_parking, 1, 0, ML_STAR);
  MECC::TraceComment(Translate("===============================================================================================\nPipetting Resuspension Buffer\n==============================================================================================="));
  if (is_pipetting == "true")
  {
    if (var_ResuspensionVolume <= 50)
    {
      Add_RSB(var_ResuspensionBuffer, seq_PlateOnHSS, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionVolume, 1, 10);
    }
    else
    {
      Add_RSB(var_ResuspensionBuffer, seq_PlateOnHSS, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, var_ResuspensionVolume, 1, 10);
    }
  }
  if( 0 == Incubate_RT_5sec.SetTimer(timer_10_sec) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StartShaker(HHS3, 1800);
  }
  MECC::TraceComment(Translate("**** 10 s shaking timer (1800 rpm) ****"));
  if( 0 == Incubate_RT_5sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  if( 0 == Incubate_RT_5sec.SetTimer(timer_2_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid_parking, ML_STAR.Water_EB_ethanol_lid, 1, 0, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StartShaker(HHS3, 400);
  }
  MECC::TraceComment(Translate("**** 2 min shaking timer (400 rpm) ****"));
  if( 0 == Incubate_RT_5sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanolStep Finish\n=================================================================================================================================="));
}

function Add_AmpureSingle( sequence & seq_AmpureBeads, sequence & seq_Destination, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_MixVolume, variable str_bead_step ) void {
  private variable MixVolume_Beads;
  private variable MixCycles_Beads;
  private variable LC_Beads;
  private variable FixedHt_Dispense;
  private variable touch_Off;
  private variable MixCycles_Disp;
  private variable bead_disp_volume;
  private variable bead_sample_mix_vol;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureSingle <<<<<<<<<<"));
  TrcTrace(Translate("*** var_BeadVolumePerWell: "), var_BeadVolumePerWell);
  TrcTrace(Translate("*** var_MixVolume: "), var_MixVolume);
  TrcTrace(Translate("*** str_bead_step: "), str_bead_step);
  if (is_pipetting == "true")
  {
    Trace ("Volume of Sample Purification Beads per well:  ", var_BeadVolumePerWell);
    if (var_LLD_On == 0)
    {
      MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
      FixedHt_Dispense = 0.2;
      touch_Off = 1;
    }
    else
    {
      MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
      FixedHt_Dispense = 0;
      touch_Off = 0;
    }
    if (var_MixVolume > 0)
    {
      MixCycles_Disp = 10;
    }
    else
    {
      MixCycles_Disp = 0;
    }
    MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
    MECC::TraceComment(Translate("********** Mix beads before dispensing 1st column ..........."));
    MixVolume_Beads = Bead_stock_volume - 5000;
    MixVolume_Beads = MixVolume_Beads / (8 * 1.0);
    if (MixVolume_Beads > 750)
    {
      MixVolume_Beads = 750;
    }
    Trace ("MixVolume_Beads:  ", MixVolume_Beads);
    MixCycles_Beads = 10;
    TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      loopCounter2 = 0;
      while (
         (seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1);
        loopCounter2 = loopCounter2 + 1;
        MixVolume_Beads = 300;
        MixCycles_Beads = 2;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        LC_Beads = Translate("BarSeq_BeadsSolution_SurfaceEmpty_Subsequent");
        MECC::TraceComment(Translate("***** Pre-wet tips with bead solution before dispensing to Midi plate ***** "));
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        MECC::TraceComment(Translate("***** Dispense beads to Midi plate ***** "));
        bead_disp_volume = var_BeadVolumePerWell;
        bead_sample_mix_vol = var_MixVolume;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
      seq_Destination.SetMax(seq_Destination.GetTotal());
      seq_AmpureBeads.SetCurrentPosition(1);
      seq_Destination.SetCurrentPosition(1);
    }
    Beads_used = var_BeadVolumePerWell * 24;
    Beads_used = Beads_used * 1.6;
    Bead_stock_volume = Bead_stock_volume - Beads_used;
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    MECC::TraceComment(Translate("******** Create mapping files ********"));
    if (bln_Global_SimulatorMode == 0)
    {
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
      {
        variable _FilterIdsArray_10[];
        variable _ColumnIdsArray_10[];
        variable _ColumnNamesArray_10[];
        variable _ExperimentsArray_10[];
        _FilterIdsArray_10.SetSize(1);
        _ColumnNamesArray_10.SetSize(10);
        _ColumnIdsArray_10.SetSize(10);
        _FilterIdsArray_10.SetAt(0, 10);
        _ColumnNamesArray_10.SetAt(0, "TRackBC");
        _ColumnIdsArray_10.SetAt(0, 1);
        _ColumnNamesArray_10.SetAt(1, "TLabwareId");
        _ColumnIdsArray_10.SetAt(1, 2);
        _ColumnNamesArray_10.SetAt(2, "TPositionId");
        _ColumnIdsArray_10.SetAt(2, 3);
        _ColumnNamesArray_10.SetAt(3, "TStatusSummary");
        _ColumnIdsArray_10.SetAt(3, 5);
        _ColumnNamesArray_10.SetAt(4, "TSumStateDescription");
        _ColumnIdsArray_10.SetAt(4, 6);
        _ColumnNamesArray_10.SetAt(5, "SRackBC");
        _ColumnIdsArray_10.SetAt(5, 8);
        _ColumnNamesArray_10.SetAt(6, "SLabwareId");
        _ColumnIdsArray_10.SetAt(6, 9);
        _ColumnNamesArray_10.SetAt(7, "SPositionId");
        _ColumnIdsArray_10.SetAt(7, 10);
        _ColumnNamesArray_10.SetAt(8, "SPositionBC");
        _ColumnIdsArray_10.SetAt(8, 11);
        _ColumnNamesArray_10.SetAt(9, "ActionDateTime");
        _ColumnIdsArray_10.SetAt(9, 12);
        _ExperimentsArray_10.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 4, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureSingle <<<<<<<<<<"));
}

private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void {
  private variable ret_AbortMethod;
  private variable var_DialogBoxString;
  private variable loopCounter_ChannelsNoTips;
  private variable ret_ReloadTips;
  private variable channelIndex;
  private variable flag_SkipToNextTipRack;
  private variable var_TipSequenceCurrentPosition;
  private variable var_NumberChannelsWithNoTips;
  private variable var_PickupPattern;
  private variable var_NoTipChannelString;
  private variable var_NumberTipsRemaining;
  private variable firmwareReturn;
  private variable var_Channel;
  private variable isTipPresent;
  private variable var_TipPickupPattern;
  private variable ret_RetryNextTipRack;
  private variable var_TipSequenceEndPosition;
  private variable Tip_Counter;
  private variable SimOn;
  private variable firmwareCommand;
  private variable arr_ChannelsNoTip[];
  private dialog customDialog_11;
  private dialog customDialog_12;
  private dialog dialogHandle_13;
  private variable loopCounter8;
  private variable int_tips_picked_up;
  private variable int_tip_type;
  private variable str_tip_type;
  MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
  SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (SimOn == 0)
  {
    STAR_TIP_TOOLS::GetTipType(ML_STAR, seq_TipsToUse, int_tip_type);
    if (int_tip_type == 23)
    {
      Tip_Counter = "tip_counter_50";
      str_tip_type = "50 uL tips";
    }
    if (int_tip_type == 1)
    {
      Tip_Counter = "tip_counter_300";
      str_tip_type = "300 uL tips";
    }
    if (int_tip_type == 5)
    {
      Tip_Counter = "tip_counter_1000";
      str_tip_type = "1000 uL tips";
    }
    var_PickupPattern = Translate("");
    arr_ChannelsNoTip.SetSize(0);
    {
      for(channelIndex = 0; channelIndex < 8;)
      {
        channelIndex = channelIndex + 1;
        firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	firmwareReturn = arrRetValues[3];
        }
        isTipPresent = StrMid(firmwareReturn, 5, 1);
        if (isTipPresent == "1")
        {
          var_TipPickupPattern = Translate("0");
        }
        else
        {
          var_TipPickupPattern = Translate("1");
          arr_ChannelsNoTip.AddAsLast(channelIndex);
        }
        var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
      }
    }
    var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
    var_NoTipChannelString = Translate("");
    {
      for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
      {
        loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
        var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
        var_Channel = StrIStr(var_Channel);
        if (loopCounter_ChannelsNoTips != 1)
        {
          var_Channel = StrConcat2(Translate(", "), var_Channel);
        }
        var_NoTipChannelString = var_NoTipChannelString + var_Channel;
      }
    }
    var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
    var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
    var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
    var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
    flag_SkipToNextTipRack = 1;
    if (var_NumberTipsRemaining <= 96)
    {
      flag_SkipToNextTipRack = 0;
    }
    var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested "), str_tip_type);
    customDialog_12.InitCustomDialog("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");
    customDialog_12.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
    customDialog_12.SetCustomDialogProperty( "textBlock1.Text", var_DialogBoxString );
    customDialog_12.ShowCustomDialog();
    ret_AbortMethod = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
    ret_ReloadTips = customDialog_12.GetCustomDialogProperty( "radioButton1.IsChecked" );
    ret_RetryNextTipRack = customDialog_12.GetCustomDialogProperty( "radioButton2.IsChecked" );
    if (ret_AbortMethod == 2)
    {
      abort;
    }
    if (ret_ReloadTips == 1)
    {
      int_tips_picked_up = 0;
      {
        loopCounter8 = 0;
        while (int_tips_picked_up == 0)
        {
          loopCounter8 = loopCounter8 + 1;
          PTL::ResetUnloadingStateAndSequences();
          PTL::SetUnloadingState("UserResponseTime", 0);
          PTL::SetUnloadingState("ErrorHandling", 3);
          PTL::SetUnloadingSize(1);
          PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
          if( 0 == PTL::Unload(ML_STAR) )
          {
                PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::GetUnloadingSequence(0, seq_TipsToUse);
          customDialog_11.InitCustomDialog("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");
          customDialog_11.ShowCustomDialog();
          PTL::ResetLoadingStateAndSequences();
          PTL::SetLoadingState("UserResponseTime", hslInfinite);
          PTL::SetLoadingState("ErrorHandling", 5);
          PTL::SetLoadingState("InitializeCustomStepID", 0);
          PTL::SetLoadingState("LoadCarrierCustomStepID", 12);
          PTL::SetLoadingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetLoadingState("CalibrateCarrierChannel", -1);
          PTL::SetLoadingSize(1);
          PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
          if( 0 == PTL::Load(ML_STAR, hslTrue) )
          {
                PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::GetLoadingSequence(0, seq_TipsToUse);
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          onerror goto errLabel_14 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          int_tips_picked_up = 1;
          errLabel_14 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
        }
      }
    }
    if (ret_RetryNextTipRack == 1)
    {
      if (var_TipSequenceCurrentPosition <= 96)
      {
        seq_TipsToUse.SetCurrentPosition(97);
      }
      else
      {
        if (var_TipSequenceCurrentPosition <= 192)
        {
          seq_TipsToUse.SetCurrentPosition(193);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 288)
          {
            seq_TipsToUse.SetCurrentPosition(289);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 384)
            {
              seq_TipsToUse.SetCurrentPosition(385);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 480)
              {
                seq_TipsToUse.SetCurrentPosition(481);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 576)
                {
                  seq_TipsToUse.SetCurrentPosition(577);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 672)
                  {
                    seq_TipsToUse.SetCurrentPosition(673);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 768)
                    {
                      seq_TipsToUse.SetCurrentPosition(769);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 864)
                      {
                        seq_TipsToUse.SetCurrentPosition(865);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      onerror goto errLabel_15 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_15 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_13.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_13.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
  }
  MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
}

function Transfer_PlatetoWaste( sequence & seq_AspirationPosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlatetoWaste <<<<<<<<<<"));
  TrcTrace(Translate("*** transfer volume: "), var_VolumeToTransfer);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter1 = 0;
    while (
       (seq_AspirationPosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1);
      loopCounter1 = loopCounter1 + 1;
      TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlatetoWaste <<<<<<<<<<"));
}

function Add_Ethanol( variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol ) void {
  private variable NumberOfCompleteColumns;
  private variable AspVolume_Ethanol1;
  private variable AspVolume_Ethanol2;
  private variable RemainingWells;
  private variable AspVolume_Ethanol;
  private variable NumberOfColumns;
  private variable AspVolume_Ethanol3;
  private variable NumberOfDispenses1;
  private variable MixCycles;
  private variable VolumeToAspirate;
  private variable NumberOfDispenses2;
  private variable ActualIncubationDuration;
  private variable NumberOfDispenses3;
  private variable Timer_Incubate30sec;
  private variable loopCounter4;
  private variable NumberOfDispenses;
  private variable NumberOfAspirations;
  private timer Incubate30sec;
  if (bln_Global_SkipAllTimers == 0)
  {
    Timer_Incubate30sec = 23;
  }
  else
  {
    Timer_Incubate30sec = 1;
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
  NumberOfCompleteColumns = var_NumberOfSamples / 8;
  RemainingWells = var_NumberOfSamples % 8;
  Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
  Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
  if (RemainingWells > 0)
  {
    NumberOfColumns = NumberOfCompleteColumns + 1;
  }
  else
  {
    NumberOfColumns = NumberOfCompleteColumns;
  }
  AspVolume_Ethanol = 200 * NumberOfColumns;
  Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
  if (AspVolume_Ethanol <= 1000)
  {
    NumberOfAspirations = 1;
    NumberOfDispenses1 = NumberOfColumns;
    AspVolume_Ethanol1 = AspVolume_Ethanol;
  }
  else
  {
    NumberOfAspirations = AspVolume_Ethanol / (1000 * 1.0);
    NumberOfAspirations = MthCeiling(NumberOfAspirations);
    NumberOfDispenses1 = 5;
    NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
    if (NumberOfDispenses2 > 5)
    {
      NumberOfDispenses3 = NumberOfDispenses2 - 5;
      NumberOfDispenses2 = 5;
    }
    AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
    AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
    AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
  }
  Trace ("Number of Aspirations:  ", NumberOfAspirations);
  Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
  Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
  Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
  Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
  Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
  Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter4 = 0;
    while (
       (seq_DispensePosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1);
      loopCounter4 = loopCounter4 + 1;
      if (loopCounter4 == 1)
      {
        TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
        VolumeToAspirate = AspVolume_Ethanol1;
        NumberOfDispenses = NumberOfDispenses1;
        MixCycles = 1;
      }
      if (loopCounter4 == 2)
      {
        VolumeToAspirate = AspVolume_Ethanol2;
        NumberOfDispenses = NumberOfDispenses2;
        MixCycles = 0;
      }
      if (loopCounter4 == 3)
      {
        VolumeToAspirate = AspVolume_Ethanol3;
        NumberOfDispenses = NumberOfDispenses3;
        MixCycles = 0;
      }
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
        {
          loopCounter3 = loopCounter3 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      if (loopCounter4 == 1)
      {
        if( 0 == Incubate30sec.SetTimer(Timer_Incubate30sec) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (
         (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
    seq_DispensePosition.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  if (bln_Global_SimulatorMode == 0)
  {
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_16[];
      variable _ColumnIdsArray_16[];
      variable _ColumnNamesArray_16[];
      variable _ExperimentsArray_16[];
      _FilterIdsArray_16.SetSize(0);
      _ColumnNamesArray_16.SetSize(14);
      _ColumnIdsArray_16.SetSize(14);
      _ColumnNamesArray_16.SetAt(0, "RecordId");
      _ColumnIdsArray_16.SetAt(0, 0);
      _ColumnNamesArray_16.SetAt(1, "TRackBC");
      _ColumnIdsArray_16.SetAt(1, 1);
      _ColumnNamesArray_16.SetAt(2, "TLabwareId");
      _ColumnIdsArray_16.SetAt(2, 2);
      _ColumnNamesArray_16.SetAt(3, "TPositionId");
      _ColumnIdsArray_16.SetAt(3, 3);
      _ColumnNamesArray_16.SetAt(4, "TPositionBC");
      _ColumnIdsArray_16.SetAt(4, 4);
      _ColumnNamesArray_16.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_16.SetAt(5, 5);
      _ColumnNamesArray_16.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_16.SetAt(6, 6);
      _ColumnNamesArray_16.SetAt(7, "TVolume");
      _ColumnIdsArray_16.SetAt(7, 7);
      _ColumnNamesArray_16.SetAt(8, "SRackBC");
      _ColumnIdsArray_16.SetAt(8, 8);
      _ColumnNamesArray_16.SetAt(9, "SLabwareId");
      _ColumnIdsArray_16.SetAt(9, 9);
      _ColumnNamesArray_16.SetAt(10, "SPositionId");
      _ColumnIdsArray_16.SetAt(10, 10);
      _ColumnNamesArray_16.SetAt(11, "SPositionBC");
      _ColumnIdsArray_16.SetAt(11, 11);
      _ColumnNamesArray_16.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_16.SetAt(12, 12);
      _ColumnNamesArray_16.SetAt(13, "UserName");
      _ColumnIdsArray_16.SetAt(13, 13);
      _ExperimentsArray_16.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_16, 0, _ColumnIdsArray_16, _ColumnNamesArray_16, _ExperimentsArray_16, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
  }
  seq_DispensePosition.SetCurrentPosition(1);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ActualIncubationDuration = Incubate30sec.GetElapsedTime();
  Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
}

function Remove_ResidualEtOH( sequence & seq_AspirationPosition ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Remove_ResidualEtOH <<<<<<<<<<"));
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter1 = 0;
    while (
       (seq_AspirationPosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1);
      loopCounter1 = loopCounter1 + 1;
      TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Remove_ResidualEtOH <<<<<<<<<<"));
}

function Add_RSB( sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_TouchOff, variable var_RetractHeight ) void {
  private variable DispenseAboveTouch;
  private variable FixedHeight;
  private variable mix_volume_rsb;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_RSB <<<<<<<<<<"));
  mix_volume_rsb = var_VolPerSampleWell * 0.75;
  TrcTrace(Translate("*** var_VolPerSampleWell: "), var_VolPerSampleWell);
  TrcTrace(Translate("*** mix_volume_rsb: "), mix_volume_rsb);
  TrcTrace(Translate("*** var_TouchOff: "), var_TouchOff);
  TrcTrace(Translate("*** var_RetractHeight: "), var_RetractHeight);
  if (var_TouchOff == 1)
  {
    FixedHeight = 0;
    DispenseAboveTouch = 1;
  }
  else
  {
    FixedHeight = 0.1;
    DispenseAboveTouch = 0;
  }
  {
    loopCounter1 = 0;
    while (
       (seq_DispensePosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1);
      loopCounter1 = loopCounter1 + 1;
      TipPickupWithErrorHandling(seq_TipsToUse);
      if (var_VolPerSampleWell <= 50)
      {
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      else
      {
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
    seq_DispensePosition.SetCurrentPosition(1);
  }
  MECC::TraceComment(Translate("******** Create mapping files ********"));
  if (bln_Global_SimulatorMode == 0)
  {
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_17[];
      variable _ColumnIdsArray_17[];
      variable _ColumnNamesArray_17[];
      variable _ExperimentsArray_17[];
      _FilterIdsArray_17.SetSize(1);
      _ColumnNamesArray_17.SetSize(10);
      _ColumnIdsArray_17.SetSize(10);
      _FilterIdsArray_17.SetAt(0, 10);
      _ColumnNamesArray_17.SetAt(0, "TRackBC");
      _ColumnIdsArray_17.SetAt(0, 1);
      _ColumnNamesArray_17.SetAt(1, "TLabwareId");
      _ColumnIdsArray_17.SetAt(1, 2);
      _ColumnNamesArray_17.SetAt(2, "TPositionId");
      _ColumnIdsArray_17.SetAt(2, 3);
      _ColumnNamesArray_17.SetAt(3, "TStatusSummary");
      _ColumnIdsArray_17.SetAt(3, 5);
      _ColumnNamesArray_17.SetAt(4, "TSumStateDescription");
      _ColumnIdsArray_17.SetAt(4, 6);
      _ColumnNamesArray_17.SetAt(5, "SRackBC");
      _ColumnIdsArray_17.SetAt(5, 8);
      _ColumnNamesArray_17.SetAt(6, "SLabwareId");
      _ColumnIdsArray_17.SetAt(6, 9);
      _ColumnNamesArray_17.SetAt(7, "SPositionId");
      _ColumnIdsArray_17.SetAt(7, 10);
      _ColumnNamesArray_17.SetAt(8, "SPositionBC");
      _ColumnIdsArray_17.SetAt(8, 11);
      _ColumnNamesArray_17.SetAt(9, "ActionDateTime");
      _ColumnIdsArray_17.SetAt(9, 12);
      _ExperimentsArray_17.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 4, _FilterIdsArray_17, 0, _ColumnIdsArray_17, _ColumnNamesArray_17, _ExperimentsArray_17, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_RSB <<<<<<<<<<"));
}

function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetHHSTemperature <<<<<<<<<<"));
  HSLHamHeaterShaker::StopTempCtrl(var_HHS_ID);
  if (var_Temperature != 0)
  {
    Trace ("***** HHS number ", var_HHS_ID, " is being set to ", var_Temperature, "C");
    HSLHamHeaterShaker::StartTempCtrl(var_HHS_ID, var_Temperature, 0);
  }
  else
  {
    Trace ("***** HHS number ", var_HHS_ID, " is not being controlled, as it is desired to be at room temperature.");
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetHHSTemperature <<<<<<<<<<"));
}

private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  TipPickupWithErrorHandling <<<<<<<<<<"));
  onerror goto errLabel_18 ;
  err.Clear();
  STAR_TIP_TOOLS::TipCheck(ML_STAR, seq_tipsForPickup, Translate("tip_counter_1000"), 8);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  errLabel_18 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    ErrorHandling_TipPickup(seq_tipsForPickup);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  TipPickupWithErrorHandling <<<<<<<<<<"));
}

private function Get_Tip_Use_Str( sequence & in_seq ) variable {
  private variable num_of_tips_needed;
  private variable tip_str;
  num_of_tips_needed = SeqGetTotal(in_seq);
  tip_str = "11111111";
  if (num_of_tips_needed == 2)
  {
    tip_str = "11000000";
  }
  if (num_of_tips_needed == 4)
  {
    tip_str = "11110000";
  }
  if (num_of_tips_needed == 6)
  {
    tip_str = "00111111";
  }
  return (tip_str);
}

private function DebuggingPause(  ) void {
  private dialog dialogHandle_19;
  dialogHandle_19.SetOutput(Translate("Click 'OK' to continue."));
  dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}

private function Transfer_FromMidiOnMagnet( sequence & i_seqAsp, sequence & i_seqDisp, variable i_fltVolume, variable i_fltMixVolume, variable i_intDestinationIsEmpty ) void {
  private variable liquid_class;
  private variable disp_cLLD;
  private variable disp_mix_cycles;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_FromMidiOnMagnet <<<<<<<<<<"));
  TrcTrace(Translate("*** pipetting volume: "), i_fltVolume);
  if (i_intDestinationIsEmpty == 0)
  {
    MECC::TraceComment(Translate("destination plate is not empty, use cLLD on dispense, and _Surf_Empty liquid class"));
    liquid_class = "BarSeq_SVF_CleanSample_SurfaceEmpty";
    disp_cLLD = 1;
    if (i_fltMixVolume > 0)
    {
      disp_mix_cycles = 10;
    }
    else
    {
      disp_mix_cycles = 0;
    }
    TrcTrace(Translate("*** dispense mixing volume: "), i_fltMixVolume);
    TrcTrace(Translate("*** dispense mixing cycles: "), disp_mix_cycles);
  }
  else
  {
    MECC::TraceComment(Translate("destination plate is empty, no cLLD on dispense, and _Jet_Empty liquid class"));
    liquid_class = "BarSeq_SVF_CleanSample_JetEmpty";
    disp_cLLD = 0;
    disp_mix_cycles = 0;
  }
  TrcTrace(Translate("*** liquid_class: "), liquid_class);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter4 = 0;
    i_seqAsp.SetCurrentPosition(1);
    i_seqDisp.SetCurrentPosition(1);
    while (
       (i_seqAsp.GetCurrentPosition() > 0)
    && (i_seqDisp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, i_seqAsp, 1, i_seqDisp, 1);
      loopCounter4 = loopCounter4 + 1;
      TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (i_seqAsp.GetCurrentPosition() > 0 && i_seqAsp.GetMax() == 0 )
      && (i_seqDisp.GetCurrentPosition() > 0 && i_seqDisp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    i_seqAsp.SetMax(i_seqAsp.GetTotal());
    i_seqDisp.SetMax(i_seqDisp.GetTotal());
    i_seqAsp.SetCurrentPosition(1);
    i_seqDisp.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_FromMidiOnMagnet <<<<<<<<<<"));
}

private function Transfer_PCRtoMidi( sequence & i_seqAsp, sequence & i_seqDisp, variable i_fltVolume, variable i_fltMixVolume ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PCRtoMidi <<<<<<<<<<"));
  TrcTrace(Translate("*** pipetting volume: "), i_fltVolume);
  TrcTrace(Translate("*** dispense mixing volume: "), i_fltMixVolume);
  MECC::TraceComment(Translate("\"*** dispense mixing cycles: 10\""));
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter4 = 0;
    i_seqAsp.SetCurrentPosition(1);
    i_seqDisp.SetCurrentPosition(1);
    while (
       (i_seqAsp.GetCurrentPosition() > 0)
    && (i_seqDisp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, i_seqAsp, 1, i_seqDisp, 1);
      loopCounter4 = loopCounter4 + 1;
      TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (i_seqAsp.GetCurrentPosition() > 0 && i_seqAsp.GetMax() == 0 )
      && (i_seqDisp.GetCurrentPosition() > 0 && i_seqDisp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    i_seqAsp.SetMax(i_seqAsp.GetTotal());
    i_seqDisp.SetMax(i_seqDisp.GetTotal());
    i_seqAsp.SetCurrentPosition(1);
    i_seqDisp.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PCRtoMidi <<<<<<<<<<"));
}

private function Transfer_ReagentsToPCR( sequence & i_seq_Tips, sequence & i_seqAsp, sequence & i_seqDisp, variable i_fltVolume, variable i_int_AspMixCycles, variable i_flt_AspMixVolume, variable i_int_DispMixCycles, variable i_flt_DispMixVolume, variable i_intDestinationIsEmpty, variable i_int_UseFourChannels, variable i_int_AspirationMode, variable i_int_ReuseTips ) void {
  private variable liquid_class;
  private variable int_tip_type;
  private variable disp_cLLD;
  private variable channel_str_arr[];
  private variable channel_str_arr_len;
  private variable loopCounter8;
  private variable channel_str;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_ReagentsToPCR <<<<<<<<<<"));
  TrcTrace(Translate("*** pipetting volume: "), i_fltVolume);
  TrcTrace(Translate("*** aspirate mix cycles: "), i_int_AspMixCycles);
  TrcTrace(Translate("*** aspirate mix volume: "), i_flt_AspMixVolume);
  TrcTrace(Translate("*** dispense mix cycles: "), i_int_DispMixCycles);
  TrcTrace(Translate("*** dispense mix volume: "), i_flt_DispMixVolume);
  TrcTrace(Translate("*** i_int_AspirationMode: "), i_int_AspirationMode);
  TrcTrace(Translate("*** i_int_ReuseTips: "), i_int_ReuseTips);
  STAR_TIP_TOOLS::GetTipType(ML_STAR, i_seq_Tips, int_tip_type);
  TrcTrace(Translate("*** integer tip type: "), int_tip_type);
  if (i_intDestinationIsEmpty == 0)
  {
    MECC::TraceComment(Translate("destination plate is not empty, use cLLD on dispense, and _Surf_Empty liquid class"));
    disp_cLLD = 1;
    if (int_tip_type == 23)
    {
      liquid_class = "BarSeq_50F_CleanSample_SurfaceEmpty";
    }
    if (int_tip_type == 1)
    {
      liquid_class = "BarSeq_SVF_PCR_Reagents_SurfaceEmpty";
    }
  }
  else
  {
    MECC::TraceComment(Translate("destination plate is empty, no cLLD on dispense, still _Surface_Empty liquid class"));
    disp_cLLD = 0;
    if (int_tip_type == 23)
    {
      liquid_class = "Tip_50ulFilter_Water_DispenseSurface_Empty";
    }
    if (int_tip_type == 1)
    {
      liquid_class = "BarSeq_SVF_PCR_Reagents_SurfaceEmpty";
    }
  }
  TrcTrace(Translate("*** liquid class: "), liquid_class);
  TrcTrace(Translate("*** disp_cLLD: "), disp_cLLD);
  channel_str_arr.SetSize(0);
  if (i_int_ReuseTips == 1)
  {
    channel_str_arr.AddAsLast("11111111");
  }
  else
  {
    if (i_int_UseFourChannels == 1)
    {
      channel_str_arr.AddAsLast("11110000");
      channel_str_arr.AddAsLast("00001111");
    }
    else
    {
      channel_str_arr.AddAsLast("11111111");
    }
  }
  channel_str_arr_len=channel_str_arr.GetSize();
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  if (i_int_ReuseTips == 1)
  {
    TipPickupWithErrorHandling(i_seq_Tips);
  }
  {
    loopCounter4 = 0;
    i_seqAsp.SetCurrentPosition(1);
    i_seqDisp.SetCurrentPosition(1);
    while (
       (i_seqAsp.GetCurrentPosition() > 0)
    && (i_seqDisp.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, i_seqAsp, 1, i_seqDisp, 1);
      loopCounter4 = loopCounter4 + 1;
      if (i_int_ReuseTips != 1)
      {
        TipPickupWithErrorHandling(i_seq_Tips);
      }
      {
        for(loopCounter8 = 0; loopCounter8 < channel_str_arr_len;)
        {
          loopCounter8 = loopCounter8 + 1;
          channel_str=channel_str_arr.GetAt(loopCounter8-1);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (i_int_ReuseTips != 1)
          {
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
      }
      if (
         (i_seqAsp.GetCurrentPosition() > 0 && i_seqAsp.GetMax() == 0 )
      && (i_seqDisp.GetCurrentPosition() > 0 && i_seqDisp.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    i_seqAsp.SetMax(i_seqAsp.GetTotal());
    i_seqDisp.SetMax(i_seqDisp.GetTotal());
    i_seqAsp.SetCurrentPosition(1);
    i_seqDisp.SetCurrentPosition(1);
  }
  if (i_int_ReuseTips == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_ReagentsToPCR <<<<<<<<<<"));
}

private function User_add_300_tips(  ) void {
  private dialog dialogHandle_20;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  User_add_300_tips <<<<<<<<<<"));
  dialogHandle_20.SetOutput(Translate("Add six additional racks of 300 uL tips, then click ok to edit the tip counter and continue."));
  dialogHandle_20.ShowOutput(Translate("New tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  User_add_300_tips <<<<<<<<<<"));
}
