private function CleanUp(  ) void ;
private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer, sequence & seq_PlateOnHSS ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    if (time_point == 4)
    {
      NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

private function StartUp(  ) void {
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable SetTempCPAC;
  private dialog customDialog_4;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  user_choice = 1;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  user_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  if (time_point == 1)
  {
    user_choice = 1;
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    user_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if (user_choice == 2)
    {
      abort;
    }
  }
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  if (bln_Global_SimulatorMode == 0)
  {
    if(0){
      str_Global_ODTCIPAddress = Translate("192.168.88.253");
    }
    str_Global_ODTCIPAddress = Translate("169.254.207.19");
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    user_choice = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (user_choice == 2)
    {
      abort;
    }
    SetTempCPAC = 6;
    NIST_TRUSEQNANO_PREP::InitCPAC(bln_Global_SimulatorMode);
    NIST_TRUSEQNANO_PREP::SetCPACTemperature(SetTempCPAC);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer, sequence & seq_PlateOnHSS ) void {
  private timer Incubate_RT_2min;
  private timer EvaporationTime;
  private timer Incubate_RT_5sec;
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  private dialog dialogHandle_9;
  private dialog dialogHandle_10;
  private dialog dialogHandle_11;
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanol Step\n=================================================================================================================================="));
  {
    for(loopCounter5 = 0; loopCounter5 < 1;)
    {
      loopCounter5 = loopCounter5 + 1;
      dialogHandle_6.SetOutput(Translate("Add ethanol"));
      dialogHandle_6.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Alcohol Supernatant to Waste\n=================================================================================================================================="));
      dialogHandle_8.SetOutput(Translate("supernatant to waste"));
      dialogHandle_8.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nRemove Residual Ethanol\n=================================================================================================================================="));
  MECC::TraceComment(Translate("==================================================================================================================================\nMove to Shaker\n=================================================================================================================================="));
  ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nPipetting Resuspension Buffer\n=================================================================================================================================="));
  dialogHandle_11.SetOutput(Translate("Pipetting Resuspension Buffer"));
  dialogHandle_11.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  if( 0 == Incubate_RT_5sec.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StartShaker(HHS3, 1800);
  }
  MECC::TraceComment(Translate("**** 10s shaking timer ****"));
  if( 0 == Incubate_RT_5sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  if( 0 == Incubate_RT_2min.SetTimer(timer_5_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("**** 5 minute timer ****"));
  if( 0 == Incubate_RT_2min.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanolStep Finish\n=================================================================================================================================="));
}
