global device ML_STAR ("Post-Selection PCR Prep.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "Post-Selection PCR Prep.res"
variable pipette_volume;
variable mix_volume;
dialog customDialog_1;
dialog customDialog_2;
variable primer_mix_volume;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PLATEANDLIDMOVEMENT::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_lid, ML_STAR.Elution_Plate_Lid_Parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nTransfer DNA template from Elution Plate to PCR plate\n***************************************************************************"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    pipette_volume = 40;
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 10);
    MECC::TraceComment(Translate("***************************************************************************\nAdd Enzyme to PCR plate\n***************************************************************************"));
    pipette_volume = 5;
    mix_volume = 25;
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Restr_Enzyme);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", mix_volume);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Restr_Enzyme, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_Lid_Parking, ML_STAR.Elution_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Primer_Plate_lid, ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    primer_mix_volume = 100;
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("primer mixing volume: "), hslFloat, primer_mix_volume, 0, 200);
    dialogHandle1.ShowInput(Translate("Enter Primer Mixing Volume"), hslInfinite, hslOKOnly | hslDefButton1);
    primer_mix_volume = dialogHandle1.GetInputField(0);
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Primer_mix_from_1);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.Primer_mix_to_1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", primer_mix_volume);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, primer_mix_volume, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_mix_from_1, ML_STAR.Primer_mix_to_1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Primer_mix_from_2);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.Primer_mix_to_2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "11000000");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "11000000");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "11000000");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", primer_mix_volume);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, primer_mix_volume, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_mix_from_2, ML_STAR.Primer_mix_to_2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd Primers to PCR plate\n***************************************************************************"));
    pipette_volume = 2.5;
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.Primer_1);
      arrseqDispense_6.SetSize(1);
      arrseqDispense_6.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_1, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_7[];
      sequence arrseqDispense_7[];
      arrseqAspirate_7.SetSize(1);
      arrseqAspirate_7.SetAt(0, ML_STAR.Primer_2);
      arrseqDispense_7.SetSize(1);
      arrseqDispense_7.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_7, arrseqDispense_7, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_2, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd PCR Master Mix to PCR plate\n***************************************************************************"));
    pipette_volume = 50;
    mix_volume = 50;
    {
      sequence arrseqAspirate_8[];
      sequence arrseqDispense_8[];
      arrseqAspirate_8.SetSize(1);
      arrseqAspirate_8.SetAt(0, ML_STAR.Master_Mix);
      arrseqDispense_8.SetSize(1);
      arrseqDispense_8.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", mix_volume);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_8, arrseqDispense_8, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Master_Mix, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
