private function CleanUp(  ) void ;
private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer ) void ;
private function GetParams(  ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    if (time_point == 4)
    {
      NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
}

private function StartUp(  ) void {
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable user_choice;
  private dialog dialogHandle_4;
  private dialog customDialog_5;
  private variable SetTempCPAC;
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  primer_mix_volume = 100;
  dialogHandle_4.SetInputSize(1);
  dialogHandle_4.SetInputField(0, Translate("Primer mixing volume?"), hslFloat, primer_mix_volume, 0, 200);
  dialogHandle_4.ShowInput(Translate("Select mixing volume for Primer Plate (or zero for no primer mixing)"), hslInfinite, hslOKOnly | hslDefButton1);
  primer_mix_volume = dialogHandle_4.GetInputField(0);
  user_choice = 1;
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  user_choice = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  user_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  SeqEdit2(ML_STAR.MlStar50ulTipWithFilter, ML_STAR, Translate("Edit Tip Sequence for 50 uL Tips"), Translate("Verify and/or edit the 50 uL tip sequence:"), 300, Translate(""), 0, ML_STAR.MlStar50ulTipWithFilter, 1, Translate(""));
  SeqEdit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR, Translate("Edit Tip Sequence for 300 uL Tips"), Translate("Verify and/or edit the 300 uL tip sequence:"), 300, Translate(""), 0, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, Translate(""));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if (bln_Global_SimulatorMode == 0)
  {
    str_Global_ODTCIPAddress = Translate("192.168.88.253");
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    user_choice = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    if (user_choice == 2)
    {
      abort;
    }
    SetTempCPAC = 6;
    NIST_TRUSEQNANO_PREP::InitCPAC(bln_Global_SimulatorMode);
    NIST_TRUSEQNANO_PREP::SetCPACTemperature(SetTempCPAC);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable time_point_str;
  private variable key_exists;
  private variable param_file;
  private variable file_exists;
  private dialog customDialog_6;
  private dialog dialogHandle_7;
  private dialog customDialog_8;
  private dialog dialogHandle_9;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  param_file = "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv";
  file_exists = HSLExtensions::File::Exists(param_file);
  if (file_exists == 1)
  {
    file1.AddField(1, read_line, hslString);
    file1.SetDelimiter(hslAsciiText);
    if( 0 == file1.Open(param_file, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, param_file, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        loc = StrFind(read_line, ",");
        if (loc > 0)
        {
          split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
          HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "timePoint");
    if (key_exists == 1)
    {
      time_point_str = HSLExtensions::Dictionary::GetItem(param_dict, "timePoint");
      time_point = StrFVal(time_point_str);
      if (time_point > 4)
      {
        customDialog_8.InitCustomDialog("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");
        customDialog_8.ShowCustomDialog();
        abort;
      }
      else
      {
        if (time_point < 1)
        {
          customDialog_6.InitCustomDialog("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");
          customDialog_6.ShowCustomDialog();
          abort;
        }
      }
    }
    else
    {
      dialogHandle_7.SetInputSize(1);
      dialogHandle_7.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
      dialogHandle_7.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
      time_point = dialogHandle_7.GetInputField(0);
    }
  }
  else
  {
    dialogHandle_9.SetInputSize(1);
    dialogHandle_9.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
    dialogHandle_9.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
    time_point = dialogHandle_9.GetInputField(0);
  }
}

private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer ) void {
  private variable TrackingEthanolVolume_80;
  private timer Incubate_RT_2min;
  private timer EvaporationTime;
  private timer Incubate_RT_3min;
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanol Step\n=================================================================================================================================="));
  {
    for(loopCounter5 = 0; loopCounter5 < 2;)
    {
      loopCounter5 = loopCounter5 + 1;
      NIST_TRUSEQNANO_PROCESSES::Add_Ethanol(ML_STAR, 24, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, seq_EthanolSource, seq_PlateOnMagnet, Translate("Nano_HVF_80PercentEtOH_JetPart"), TrackingEthanolVolume_80, 0, Translate("1"));
      MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Alcohol Supernatant to Waste\n=================================================================================================================================="));
      NIST_TRUSEQNANO_PROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, seq_PlateOnMagnet, ML_STAR.LiquidWaste, 200, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
  }
  if( 0 == EvaporationTime.SetTimer(timer_5_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nRemove Residual Ethanol\n=================================================================================================================================="));
  NIST_TRUSEQNANO_PROCESSES::Remove_ResidualEtOH(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, seq_PlateOnMagnet);
  Trace ("***** Now waiting for ethanol evaporation .......");
  MECC::TraceComment(Translate("**** 5 minute timer for ethanol evaporation ****"));
  if( 0 == EvaporationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nPipetting Resuspension Buffer\n=================================================================================================================================="));
  if (var_ResuspensionVolume <= 50)
  {
    NIST_TRUSEQNANO_PROCESSES::Add_RSB(ML_STAR, ML_STAR.Elution_Buffer, seq_PlateOnMagnet, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionVolume, 1, 6);
  }
  else
  {
    NIST_TRUSEQNANO_PROCESSES::Add_RSB(ML_STAR, ML_STAR.Elution_Buffer, seq_PlateOnMagnet, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, var_ResuspensionVolume, 1, 6);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nMove to Shaker\n=================================================================================================================================="));
  ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    HSLHamHeaterShaker::StartShaker(HHS3, 1800);
  }
  if( 0 == Incubate_RT_2min.SetTimer(timer_2_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 120s .......");
  MECC::TraceComment(Translate("**** 2 minute shaking timer ****"));
  if( 0 == Incubate_RT_2min.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  if( 0 == Incubate_RT_3min.SetTimer(timer_3_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("**** 3 minute timer ****"));
  if( 0 == Incubate_RT_3min.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
  }
  ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanolStep Finish\n=================================================================================================================================="));
}
