#pragma once
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "..\\HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace GSF_IMS_SHARED_SUBMETHODS {
  variable channel_pattern;
  function add_reagent_replace_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void ;
  function add_reagent_reuse_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  function aspirate_w_err_handling( sequence & asp_seq, variable asp_seq_counting, variable & p_vol_arr[], sequence tips, variable number_channels, device & STAR ) void ;
  function dispense_w_err_handling( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable & p_vol_arr[], variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void ;
  function pipette_cells_from_tubes( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_inducer_delete( sequence & asp_seq, sequence & disp_seq, variable p_vol, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_selector_delete( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  private function set_channel_pattern( variable number_channels ) void ;
  function simple_aspirate( sequence & asp_seq, variable asp_seq_counting, variable p_vol, sequence tips, variable number_channels, device & STAR ) void ;
  function simple_dispense( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable p_vol, variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void ;
  function tip_eject( variable number_channels, device & STAR ) void ;
  function tip_pickup( sequence & tips, variable number_channels, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    MECC::TraceComment(Translate("**** start pipette_media shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    if (pre_wet_tips == 1)
    {
      simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
      simple_dispense(asp_seq, 0, 1, p_vol, 0, 0, number_channels, STAR);
    }
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 0, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** end pipette_media shard sub-method ****"));
  }

  function pipette_inducer_delete( sequence & asp_seq, sequence & disp_seq, variable p_vol, sequence & tips, variable number_channels, device & STAR ) void {
    add_reagent_replace_tips(asp_seq, disp_seq, p_vol, 0, 0, tips, number_channels, STAR);
  }

  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_counter;
    MECC::TraceComment(Translate("**** start pipette_dil_series shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    tip_pickup(tips, number_channels, STAR);
    {
      pipette_counter = 0;
      from_seq.SetCurrentPosition(1);
      to_seq.SetCurrentPosition(1);
      while (
         (from_seq.GetCurrentPosition() > 0)
      && (to_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, from_seq, 1, to_seq, 1);
        pipette_counter = pipette_counter + 1;
        STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        simple_dispense(to_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (from_seq.GetCurrentPosition() > 0 && from_seq.GetMax() == 0 )
        && (to_seq.GetCurrentPosition() > 0 && to_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      from_seq.SetMax(from_seq.GetTotal());
      to_seq.SetMax(to_seq.GetTotal());
      from_seq.SetCurrentPosition(1);
      to_seq.SetCurrentPosition(1);
    }
    tip_eject(number_channels, STAR);
    MECC::TraceComment(Translate("**** end pipette_dil_series shard sub-method ****"));
  }

  function pipette_selector_delete( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void {
    add_reagent_reuse_tips(asp_seq, disp_seq, p_vol, pre_wet_tips, tips, number_channels, STAR);
  }

  function tip_pickup( sequence & tips, variable number_channels, device & STAR ) void {
    set_channel_pattern(number_channels);
    STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  }

  private function set_channel_pattern( variable number_channels ) void {
    private variable channel_pattern_2;
    private variable channel_pattern_3;
    private variable channel_pattern_4;
    private variable channel_pattern_6;
    private variable channel_pattern_7;
    private variable channel_pattern_8;
    private variable channel_pattern_1;
    private variable channel_pattern_5;
    private variable chann_patt_arr[];
    channel_pattern_1 = "10000000";
    channel_pattern_2 = "11000000";
    channel_pattern_3 = "11100000";
    channel_pattern_4 = "11110000";
    channel_pattern_5 = "11111000";
    channel_pattern_6 = "11111100";
    channel_pattern_7 = "11111110";
    channel_pattern_8 = "11111111";
    chann_patt_arr.SetSize(0);
    chann_patt_arr.AddAsLast(channel_pattern_1);
    chann_patt_arr.AddAsLast(channel_pattern_2);
    chann_patt_arr.AddAsLast(channel_pattern_3);
    chann_patt_arr.AddAsLast(channel_pattern_4);
    chann_patt_arr.AddAsLast(channel_pattern_5);
    chann_patt_arr.AddAsLast(channel_pattern_6);
    chann_patt_arr.AddAsLast(channel_pattern_7);
    chann_patt_arr.AddAsLast(channel_pattern_8);
    channel_pattern=chann_patt_arr.GetAt(number_channels-1);
  }

  function tip_eject( variable number_channels, device & STAR ) void {
    set_channel_pattern(number_channels);
    STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function pipette_cells_from_tubes( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate("**** start pipette_cells_from_tubes shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    tip_pickup(tips, number_channels, STAR);
    {
      loopCounter1 = 0;
      disp_seq.SetCurrentPosition(1);
      asp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      && (asp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1, asp_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        simple_dispense(disp_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        && (asp_seq.GetCurrentPosition() > 0 && asp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      asp_seq.SetMax(asp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
      asp_seq.SetCurrentPosition(1);
    }
    tip_eject(number_channels, STAR);
    MECC::TraceComment(Translate("**** end pipette_cells_from_tubes shard sub-method ****"));
  }

  function add_reagent_reuse_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    MECC::TraceComment(Translate("**** start add_reagent_reuse_tips shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    tip_pickup(tips, number_channels, STAR);
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    tip_eject(number_channels, STAR);
    MECC::TraceComment(Translate("**** end add_reagent_reuse_tips shard sub-method ****"));
  }

  function add_reagent_replace_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    MECC::TraceComment(Translate("**** start add_reagent_replace_tips shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        tip_pickup(tips, number_channels, STAR);
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 1, p_vol, mix_cycles, mix_volume, number_channels, STAR);
        tip_eject(number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** end add_reagent_replace_tips shard sub-method ****"));
  }

  function aspirate_w_err_handling( sequence & asp_seq, variable asp_seq_counting, variable & p_vol_arr[], sequence tips, variable number_channels, device & STAR ) void {
    private variable int_tip_type;
    private variable liquid_class;
    set_channel_pattern(number_channels);
    STAR_TIP_TOOLS::GetTipType(STAR, tips, int_tip_type);
    if (int_tip_type == 1)
    {
      liquid_class = "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty";
    }
    else
    {
      if (int_tip_type == 5)
      {
        liquid_class = "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty";
      }
    }
    STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  }

  function dispense_w_err_handling( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable & p_vol_arr[], variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void {
    set_channel_pattern(number_channels);
    if (disp_to_liquid == 1)
    {
      STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
    else
    {
      STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
  }

  function simple_aspirate( sequence & asp_seq, variable asp_seq_counting, variable p_vol, sequence tips, variable number_channels, device & STAR ) void {
    private variable p_vol_arr[];
    private variable chann_loop;
    p_vol_arr.SetSize(0);
    {
      for(chann_loop = 0; chann_loop < number_channels;)
      {
        chann_loop = chann_loop + 1;
        p_vol_arr.AddAsLast(p_vol);
      }
    }
    aspirate_w_err_handling(asp_seq, asp_seq_counting, p_vol_arr, tips, number_channels, STAR);
  }

  function simple_dispense( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable p_vol, variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void {
    private variable chann_loop;
    private variable p_vol_arr[];
    p_vol_arr.SetSize(0);
    {
      for(chann_loop = 0; chann_loop < number_channels;)
      {
        chann_loop = chann_loop + 1;
        p_vol_arr.AddAsLast(p_vol);
      }
    }
    dispense_w_err_handling(disp_seq, disp_seq_counting, disp_to_liquid, p_vol_arr, mix_cycles, mix_volume, number_channels, STAR);
  }
} // library namespace
