private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function GetParams(  ) void ;
private function Get_Tip_Use_Str( sequence & in_seq ) variable ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStart StartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("tip_counter_50"), ML_STAR);
  TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tip_counter_300"), ML_STAR);
  TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tip_counter_1000"), ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  MECC::TraceComment(Translate("***************************************************************************\nEnd StartUp() submethod\n***************************************************************************"));
}

private function Get_Tip_Use_Str( sequence & in_seq ) variable {
  private variable num_of_tips_needed;
  private variable tip_str;
  num_of_tips_needed = SeqGetTotal(in_seq);
  tip_str = "11111111";
  if (num_of_tips_needed == 2)
  {
    tip_str = "11000000";
  }
  if (num_of_tips_needed == 4)
  {
    tip_str = "11110000";
  }
  if (num_of_tips_needed == 6)
  {
    tip_str = "00111111";
  }
  return (tip_str);
}

private function DebuggingPause(  ) void {
  private dialog dialogHandle_1;
  dialogHandle_1.SetOutput(Translate("Click 'OK' to continue."));
  dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}

private function GetParams(  ) void {
  private variable strain_1_id;
  private variable worklist_file_path;
  private variable dilution_factor_str;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable plasmid_key;
  private variable well_id;
  private variable has_key;
  private variable plasmid_id;
  private variable loopCounter1;
  private variable loopCounter3;
  private variable cytom_volume_str;
  private variable pbs_key;
  private variable pbs_type;
  private variable pbs_type_arr[];
  private variable pbs_id;
  private variable has_pbs_key;
  private variable pbs_source_col;
  private dialog dialogHandle_2;
  MECC::TraceComment(Translate("***************************************************************************\nStart GetParams() submethod\n***************************************************************************"));
  HSLExtensions::Dictionary::CreateDictionary(Translate("param_dict"), 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(Translate("param_dict"), split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("strain1"));
  plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("plasmid_B1"));
  HSLExtensions::Dictionary::CreateDictionary(Translate("plasmid_by_well_dict"), 2);
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      plasmid_key = StrConcat2(Translate("plasmid_"), well_id);
      has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), plasmid_key);
      if (has_key == 1)
      {
        plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
        HSLExtensions::Dictionary::AddItem(Translate("plasmid_by_well_dict"), well_id, plasmid_id);
        TrcTrace4(Translate("well_id: "), well_id, Translate(", plasmid_id: "), plasmid_id);
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  cytom_volume_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cytomVolume"));
  cytom_volume = StrFVal(cytom_volume_str);
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cytomDilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  pbs_type_arr.SetSize(0);
  HSLExtensions::Dictionary::CreateDictionary(Translate("pbs_source_dict"), 2);
  {
    for(loopCounter1 = 0; loopCounter1 < 2;)
    {
      loopCounter1 = loopCounter1 + 1;
      pbs_key = StrConcat2(Translate("pbs_source_"), loopCounter1);
      pbs_type = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), pbs_key);
      pbs_type_arr.AddAsLast(pbs_type);
      HSLExtensions::Dictionary::AddItem(Translate("pbs_source_dict"), pbs_type, loopCounter1);
    }
  }
  pbs_source_for_col_arr.SetSize(0);
  {
    for(loopCounter3 = 0; loopCounter3 < 12;)
    {
      loopCounter3 = loopCounter3 + 1;
      pbs_key = StrConcat2(Translate("pbs_"), loopCounter3);
      has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), pbs_key);
      if (has_key == 1)
      {
        pbs_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), pbs_key);
        if (pbs_id != "none")
        {
          has_pbs_key = HSLExtensions::Dictionary::ExistsItem(Translate("pbs_source_dict"), pbs_id);
          if (has_pbs_key == 1)
          {
            pbs_source_col = HSLExtensions::Dictionary::GetItem(Translate("pbs_source_dict"), pbs_id);
            pbs_source_for_col_arr.AddAsLast(pbs_source_col);
          }
          else
          {
            dialogHandle_2.SetOutput(Translate("The PBS type for "), pbs_key, Translate(", "), pbs_id, Translate(" was not listed in the input file as a 'pbs_source_n' type."), Translate("So, no PBS will be added to column "), "\n", loopCounter3, Translate(" of the Cytometry Plate."));
            dialogHandle_2.ShowOutput(Translate("Media ID not found!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            pbs_source_for_col_arr.AddAsLast(0);
          }
        }
        else
        {
          pbs_source_for_col_arr.AddAsLast(0);
        }
      }
    }
  }
  MECC::TraceComment(Translate("***************************************************************************\nEnd GetParams() submethod\n***************************************************************************"));
}
