 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\GSF-IMS.shared_submethods.hs_" }
#include "RNA circuit plate growth and cytometry.res"
variable bln_Global_SimulatorMode;
variable dilution_factor;
variable cell_volume;
global device ML_STAR ("RNA circuit plate growth and cytometry.lay", "ML_STAR", hslTrue);
global device HxFan ("RNA circuit plate growth and cytometry.lay", "HxFan", hslTrue);
variable loopCounter2;
variable gp_labware_id;
sequence disp_seq;
variable well_id;
variable has_key;
sequence asp_seq;
variable strain_1_id;
variable worklist_file_path;
variable cytom_volume;
variable pbs_source_for_col_arr[];
variable cytom_labware_id;
variable pbs_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    StartUp();
    GetParams();
    cell_volume = cytom_volume / (dilution_factor * 1.0);
    pbs_volume = cytom_volume - cell_volume;
    MECC::TraceComment(Translate("****************************************************************************************\nTake lids off of GP and cytom plate\n****************************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Growth_Plate_Lid_parking, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Cytometry_plate_lid, ML_STAR.Cytometry_plate_lid_parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("****************************************************************************************\nPipette cells from Growth Plate to Cytom plate\n****************************************************************************************"));
    gp_labware_id = SeqGetLabwareId(ML_STAR.Growth_Plate);
    cytom_labware_id = SeqGetLabwareId(ML_STAR.Cytometry_plate);
    {
      loopCounter2 = 0;
      ML_STAR.Growth_Plate.SetCurrentPosition(1);
      while (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
        loopCounter2 = loopCounter2 + 1;
        well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
        has_key = HSLExtensions::Dictionary::ExistsItem(Translate("plasmid_by_well_dict"), well_id);
        if (has_key == 1)
        {
          SeqAdd(asp_seq, gp_labware_id, well_id);
          SeqAdd(disp_seq, cytom_labware_id, well_id);
          TrcTrace(Translate("added "), well_id);
        }
        SeqIncrement(ML_STAR.Growth_Plate, 1);
        if (
           (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
      ML_STAR.Growth_Plate.SetCurrentPosition(1);
    }
    GSF_IMS_SHARED_SUBMETHODS::transfer_cells(asp_seq, disp_seq, cell_volume, 1, 10, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR);
    MECC::TraceComment(Translate("****************************************************************************************\nPut lids back on to GP and overnight plate\n****************************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Lid_parking, ML_STAR.Growth_Plate_lid, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Cytometry_plate_lid_parking, ML_STAR.Cytometry_plate_lid, 1, 1, ML_STAR);
    CleanUp();
    STAR_TIP_TOOLS::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
