private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStart StartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("tip_counter_50"), ML_STAR);
  TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tip_counter_300"), ML_STAR);
  TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tip_counter_1000"), ML_STAR);
  MECC::TraceComment(Translate("***************************************************************************\nEnd StartUp() submethod\n***************************************************************************"));
}

private function DebuggingPause(  ) void {
  private dialog dialogHandle_1;
  dialogHandle_1.SetOutput(Translate("Click 'OK' to continue."));
  dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}

private function GetParams(  ) void {
  private variable dilution_factor_str;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private variable culture_volume_str;
  private file file1;
  private variable split_line[];
  private variable plasmid_key;
  private variable well_id;
  private variable has_key;
  private variable plasmid_id;
  private variable loopCounter1;
  private variable media_key;
  private variable media_type_arr[];
  private variable media_type;
  private variable loopCounter3;
  private variable media_id;
  private variable has_media_key;
  private dialog dialogHandle1;
  private variable media_source_col;
  private variable loopCounter_str;
  MECC::TraceComment(Translate("***************************************************************************\nStart GetParams() submethod\n***************************************************************************"));
  HSLExtensions::Dictionary::CreateDictionary(Translate("param_dict"), 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(Translate("param_dict"), split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("strain1"));
  plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("plasmid_B1"));
  HSLExtensions::Dictionary::CreateDictionary(Translate("plasmid_by_well_dict"), 2);
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      plasmid_key = StrConcat2(Translate("plasmid_"), well_id);
      has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), plasmid_key);
      if (has_key == 1)
      {
        plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
        if (plasmid_id != "none")
        {
          HSLExtensions::Dictionary::AddItem(Translate("plasmid_by_well_dict"), well_id, plasmid_id);
          TrcTrace4(Translate("well_id: "), well_id, Translate(", plasmid_id: "), plasmid_id);
        }
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
  }
  culture_volume_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cultureDilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  media_type_arr.SetSize(0);
  HSLExtensions::Dictionary::CreateDictionary(Translate("media_source_dict"), 2);
  {
    for(loopCounter1 = 0; loopCounter1 < 4;)
    {
      loopCounter1 = loopCounter1 + 1;
      media_key = StrConcat2(Translate("media_source_"), loopCounter1);
      media_type = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), media_key);
      media_type_arr.AddAsLast(media_type);
      HSLExtensions::Dictionary::AddItem(Translate("media_source_dict"), media_type, loopCounter1);
    }
  }
  media_source_for_col_arr.SetSize(0);
  HSLExtensions::Dictionary::CreateDictionary(Translate("media_id_by_column_dict"), 2);
  {
    for(loopCounter3 = 0; loopCounter3 < 12;)
    {
      loopCounter3 = loopCounter3 + 1;
      loopCounter_str = StrIStr(loopCounter3);
      media_key = StrConcat2(Translate("media_"), loopCounter3);
      has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), media_key);
      if (has_key == 1)
      {
        media_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), media_key);
        if (media_id != "none")
        {
          has_media_key = HSLExtensions::Dictionary::ExistsItem(Translate("media_source_dict"), media_id);
          if (has_media_key == 1)
          {
            media_source_col = HSLExtensions::Dictionary::GetItem(Translate("media_source_dict"), media_id);
            media_source_for_col_arr.AddAsLast(media_source_col);
            HSLExtensions::Dictionary::AddItem(Translate("media_id_by_column_dict"), loopCounter_str, media_id);
          }
          else
          {
            dialogHandle1.SetOutput(Translate("The media type for "), media_key, Translate(", "), media_id, Translate(" was not listed in the input file as a 'media_source_n' type."), Translate("So, no media will be added to column "), "\n", loopCounter3, Translate(" of the Growth Plate."));
            dialogHandle1.ShowOutput(Translate("Media ID not found!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            media_source_for_col_arr.AddAsLast(0);
            HSLExtensions::Dictionary::AddItem(Translate("media_id_by_column_dict"), loopCounter_str, Translate("none"));
          }
        }
        else
        {
          media_source_for_col_arr.AddAsLast(0);
          HSLExtensions::Dictionary::AddItem(Translate("media_id_by_column_dict"), loopCounter_str, Translate("none"));
        }
      }
    }
  }
  MECC::TraceComment(Translate("***************************************************************************\nEnd GetParams() submethod\n***************************************************************************"));
}

private function CalculateOutputs(  ) void {
  MECC::TraceComment(Translate("**** CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable iniFilePath;
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private variable iniDir;
  private variable loopCounter2;
  private variable iniExists;
  private file file1;
  private variable media_id;
  MECC::TraceComment(Translate("**** SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("media", media_id, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      media_id = HSLExtensions::Dictionary::GetItem(Translate("media_id_by_column_dict"), column_id_str);
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}
